PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': 'subj-', 'session': 'sess-01', 'pracTrialRepeat': '2', 'mainTrialRepeat': '16', 'mainBlocks': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = GoNogo
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Trial
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    TextComponent text_PreFixMain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
      text = +
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    ImageComponent image_Main
      image [set every repeat] = $GNG_Image
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 0.5
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    TextComponent text_PostFixMain
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.7
      text = +
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    KeyboardComponent key_resp_Main
      allowedKeys = 'space'
      correctAns = $GNG_CorrectResp
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine blockStart
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    TextComponent text_blockStart1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Block:
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    TextComponent text_blockStart2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNum
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    TextComponent text_blockStart3
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent key_resp_blockStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expInstruct
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    TextComponent text_ExpInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Experimental Trials

        You will now do the experimental trials

        They are the same as the practise trials,
        but you will not recieve feedback

        Press SPACEBAR to begin
    KeyboardComponent key_resp_ExpInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine pracInstr
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    TextComponent text_PractInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practise Trials

        You will now do some practise trials

        You will get feedback after each trial
        about your reaction time and accuracy

        Press SPACEBAR to begin
    KeyboardComponent key_resp_PractInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine pracTrial
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    TextComponent text_PreFixPrac
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
      text = +
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    ImageComponent image_Prac
      image [set every repeat] = $GNG_Image
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 0.5
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    TextComponent text_PostFixPrac
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.7
      text = +
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    KeyboardComponent key_resp_Prac
      allowedKeys = 'space'
      correctAns = $GNG_CorrectResp
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine mainInstr
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    TextComponent text_MainInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        In this task you will be shown a series of circles, presented one at a time

        If a Yellow Circle appears, Press the SPACEBAR as quickly as possible

        If a Blue Circle appears, you should make NO RESPONSE

        Try to respond as quickly as possible, while still being accurate.

        When you are ready,
        press SPACEBAR to continue
    KeyboardComponent key_resp_MainInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_Instr
      Code Type = Auto->JS
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      Begin Experiment:
        ## Experimental Setup
        # Setup Variables
        blockNum = 1
  Routine blockEnd
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    CodeComponent code_blockEnd
      Code Type = Auto->JS
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      End Routine:
        ## iterate block number for block start text
        blockNum = blockNum +1
    TextComponent text_blockEnd1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = End of Block
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    TextComponent text_blockEnd2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $blockNum
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  Routine endScreen
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    TextComponent text_EndScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of Experiment

        Thank you for taking part!

        Press SPACE to end.
    KeyboardComponent key_resp_EndScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine pracFeedback
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    CodeComponent code_Feedback
      Code Type = Auto->JS
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      Begin Experiment:
        #feedback variable just needs some value at start
        feedback=''
      Begin Routine:
        if GNG_Condition == "NoGo" :
            if not key_resp_Prac.keys :
                feedback="Correct!"
            else:
                feedback="Wrong. No response required"

        if GNG_Condition == "Go" :
            if not key_resp_Prac.keys :
                feedback="Wrong. Failed to respond"
            elif key_resp_Prac.corr:
                feedback="Correct! RT=%.3f" %(key_resp_Prac.rt)
            else:
                feedback="Wrong. Incorrect Response"
    TextComponent text_Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback
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Flow
  Routine mainInstr
  Routine pracInstr
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = Design/conditions.xlsx
    loopType = fullRandom
    nReps = expInfo['pracTrialRepeat']
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    conditions:
      [{'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
      {'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
      {'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
      {'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
      {'GNG_Image': 'Stimuli/yellow_circle_sm.jpg', 'GNG_Condition': 'Go', 'GNG_CorrectResp': 'space'}]
    Routine pracTrial
    Routine pracFeedback
  LoopTerminator pracTrials
  Routine expInstruct
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = expInfo['mainBlocks']
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    Routine blockStart
    LoopInitiator mainTrials loopType="TrialHandler"
      conditionsFile = Design/conditions.xlsx
      loopType = fullRandom
      nReps = expInfo['mainTrialRepeat']
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      conditions:
        [{'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
        {'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
        {'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
        {'GNG_Image': 'Stimuli/blue_circle_sm.jpg', 'GNG_Condition': 'NoGo', 'GNG_CorrectResp': 'None'},
        {'GNG_Image': 'Stimuli/yellow_circle_sm.jpg', 'GNG_Condition': 'Go', 'GNG_CorrectResp': 'space'}]
      Routine Trial
    LoopTerminator mainTrials
    Routine blockEnd
  LoopTerminator blocks
  Routine endScreen
