PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'Data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': 'subj-', 'session': 'sess-01', 'backN': '2', 'probability': '0.3', 'blocks': '5', 'trials': '50'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = n-back
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    CodeComponent codeInstructions
      Code Type = Auto->JS
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      Begin Experiment:
        ### Experimental Setup
        # Setup Variables
        blockNum = 1

        ##### Uncomment the below for EEG Markers

        #### Setting up port to send EEG triggers to
        #import serial
        #port = serial.Serial('COM3')

        ## timeout 1 second (give 1 second to the board to initialize port)
        #port.timeout = 1

        ## Send blank to port to set it all to zero.
        #port.write([0x0])

        #### Markers
        #mrkBlockStart = 10
        #mrkBlockEnd = 11
        #mrkNonTarget = 20
        #mrkTarget = 21
        #mrkResponse = 5
    TextComponent instructions
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      wrapWidth = 45
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      text:
        $"The n-back task presents stimuli sequentially and \n requires you to decide if the current stimulus is \n the same as one presented n-numbers previous (or back).\n"
        + "\n"
        + "For example, the 2-back you will indicate if the current letter \n matches the letter presented 2 places previous\n"
        + "(e.g.  A H G A B G B shows that 'A' and 'G' have matches in this sequence).\n"
        + "\n\n"
        + f"This is a {expInfo['backN']}-back task.\n"
        + f"Press SPACE if the current stimulus is the same as {expInfo['backN']} places previous.\n"
        + "\n\n"
        + "Press SPACE to continue"
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    VariableComponent stimuli
      saveStartStop = False
      startExpValue = np.array(['A','B','C','D','E','F','G','H'])
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  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
         # Initialise an empty array to keep track of
         # previous stimuli.

        prevN = np.array([])
      Begin Routine:
        # Setup the "non-target / n-Back" and "target / n-Back" trials

        # non-target trial is shown if either:
        #   currentLoop.thisN < int(expInfo['backN']):
        #        Ensures that during the first N trials,
        #        no N-back trials occur (since there aren't enough past trials yet).
        #   np.random.uniform() > float(expInfo['probability']):
        #        random number generated between 0 and 1, if
        #        this exceeds the probability set in expInfo
        #        a non-N-back trial is chosen.

        if (currentLoop.thisN < int(expInfo['backN'])) or (np.random.uniform() > float(expInfo['probability'])):
            # delete previously used stimuli to ensure no nBack
            stimleft = np.delete(stimuli,[np.argwhere(stimuli==i) for i in prevN])
            stimulus = np.random.choice(stimleft)
            thisExp.addData('trial_type', 'none')
            correctResponse = None
        else: # for n-Back trial ("target")
            stimulus = prevN[-int(expInfo['backN'])]
            thisExp.addData('trial_type', 'back')
            correctResponse = 'space'

        ##### Uncomment the below for EEG Markers

        ## Setup whether an EEG trigger sent or not
        #pulse_started = False
        #pulse_ended = False
      Each Frame:
        ##### Uncomment the below for EEG Markers

        ## Sending trigger after trial_stimulus started
        #if trial_stimulus.status == STARTED and not pulse_started:
        #    if correctResponse = 'space'
        #    port.write(mrkTarget.to_bytes(length = 1, byteorder = 'little'))
        #    trialpulse_start_time = globalClock.getTime()
        #    pulse_started = True
        #    else:
        #    port.write(mrkNonTarget.to_bytes(length = 1, byteorder = 'little'))
        #    trialpulse_start_time = globalClock.getTime()
        #    pulse_started = True

        #kb = KeyBoard()
        #if kb.getKeys() =='space':
        #    port.write(mrkResponse.to_bytes(length = 1, byteorder = 'little'))
        #    response_start_time = globalClock.getTime()

        ## Ending the trigger
        #if pulse_started and not pulse_ended:
        #    if trial_stimulus.status == STARTED:
        #        if globalClock.getTime() - trialpulse_start_time >= 0.1:
        #            port.write([0x00])
        #            pulse_ended = True
      End Experiment:
        # This analyzes the participant's responses in the N-back task and logs the performance metrics.

        trialNone = 0; trialBack = 0; hit = 0; miss = 0; fa = 0
        for n, t in enumerate(thisExp.entries):
            if t['trial_type'] == 'none':
                trialNone += 1
                if not(t['trial_resp.corr']): fa += 1
            if t['trial_type'] == 'back':
                trialBack += 1
                if t['trial_resp.corr']: hit += 1
                else: miss += 1
        logging.log(level=logging.DATA, msg='hit={:.2f}%,miss={:.2f}%,fa={:.2f}%'.format(hit/trialBack*100,miss/trialBack*100,fa/trialNone*100))

        ##### Uncomment the below for EEG Markers

        ## closing port again
        #port.close()
      End Routine:
        # Record the current trial's stimulus (stimulus) in the PsychoPy experiment handler (thisExp).
        thisExp.addData('trial_stimulus.stim', stimulus)

        # Add the current stimulus to prevN, which is a list tracking previous stimuli.
        prevN = np.hstack((prevN,stimulus))

        # Ensure that prevN only stores the most recent N trials (where N = expInfo['backN']).
        prevN = prevN[-int(expInfo['backN']):]


        ##### Uncomment the below for EEG Markers

        ## Sending information to logfile
        #thisExp.addData("marker", mrkNonTarget)
        #thisExp.addData("marker", mrkTarget)
        #thisExp.addData("marker", mrkResponse)
        #thisExp.addData("marker.time", trialpulse_start_time)
        #thisExp.addData("marker.time", response_start_time)
    TextComponent trial_stimulus
      letterHeight = 2.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $stimulus
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    KeyboardComponent trial_resp
      allowedKeys = 'space'
      correctAns = $correctResponse
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine Confidencerating
    RoutineSettingsComponent Confidencerating
      disabled = True
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    TextComponent text_confidencetask
      letterHeight = 1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Please select your confidence level
        in your performance from 0 to 100 %
    SliderComponent slider_confidence
      borderColor = white
      forceEndRoutine = True
      granularity = 0
      labels = "0", "25", "50", "75", "100"
      letterHeight = 1
      pos = (0, -3)
      size = (25, 1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent codeConfidenceRating
      Code Type = Auto->JS
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      Begin Routine:
        # Makes mouse visible for this part of the experiment
        win.setMouseVisible(1)
      End Routine:
        # Makes mouse invisible again
        win.setMouseVisible(0)
  Routine blockStart
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    CodeComponent codeBlockStart
      Code Type = Auto->JS
      Begin Routine:
        ##### Uncomment the below for EEG Markers

        ## Setup whether an EEG trigger sent or not
        #pulse_started = False
        #pulse_ended = False
      Each Frame:
        ##### Uncomment the below for EEG Markers

        ## Sending trigger after textBlockStart1 started
        #if textBlockStart1.status == STARTED and not pulse_started:
        #    port.write(mrkBlockStart.to_bytes(length = 1, byteorder = 'little'))
        #    blockpulse_start_time = globalClock.getTime()
        #    pulse_started = True

        ## Ending the trigger
        #if pulse_started and not pulse_ended:
        #    if textBlockStart1.status == STARTED:
        #        if globalClock.getTime() - blockpulse_start_time >= 0.1:
        #            port.write([0x00])
        #            pulse_ended = True
      End Experiment:
        ##### Uncomment the below for EEG Markers

        ## closing port again
        #port.close()
      End Routine:
        ##### Uncomment the below for EEG Markers

        ## Sending information to logfile
        #thisExp.addData("marker", mrkBlockStart)
        #thisExp.addData("marker.time", blockpulse_start_time)
    TextComponent textBlockStart1
      letterHeight = 1
      pos = (0, 2)
      startVal [time (s)] = 0.0
      text = Block:
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    TextComponent textBlockStart2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNum
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    TextComponent textBlockStart3
      letterHeight = 1
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent keyBlockStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockEnd
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    CodeComponent codeBlockEnd
      Code Type = Auto->JS
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      Begin Routine:
        ##### Uncomment the below for EEG Markers

        ## Setup whether an EEG trigger sent or not
        #pulse_started = False
        #pulse_ended = False
      Each Frame:
        ##### Uncomment the below for EEG Markers

        ## Sending trigger after textBlockEnd started
        #if textBlockEnd.status == STARTED and not pulse_started:
        #    port.write(mrkBlockEnd.to_bytes(length = 1, byteorder = 'little'))
        #    blockendpulse_start_time = globalClock.getTime()
        #    pulse_started = True

        ## Ending the trigger
        #if pulse_started and not pulse_ended:
        #    if textBlockEnd.status == STARTED:
        #        if globalClock.getTime() - blockendpulse_start_time >= 0.1:
        #            port.write([0x00])
        #            pulse_ended = True
      End Experiment:
        ##### Uncomment the below for EEG Markers

        ## closing port again
        #port.close()
      End Routine:
        ## iterate block numner for block start text
        blockNum = blockNum +1

        ##### Uncomment the below for EEG Markers

        ## Sending information to logfile
        #thisExp.addData("marker", mrkBlockEnd)
        #thisExp.addData("marker.time", blockendpulse_start_time)
    TextComponent textBlockEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = expInfo['blocks']
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    Routine blockStart
    LoopInitiator loop loopType="TrialHandler"
      loopType = sequential
      nReps = expInfo['trials']
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      Routine trial
    LoopTerminator loop
    Routine blockEnd
    Routine Confidencerating
  LoopTerminator blocks
